<?xml version="1.0" encoding="UTF-8"?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:schemaLocation="http://labbench.io https://labbench.io/xsd/3.2.0/experiment.xsd"
            name="Introduction to LabBench (Demonstration Protocol)"
            id="introdemo"
            protocol="introdemo@labbench.io">
    <description>
    </description>
    <citation>
        No citation is required when using this protocol.
    </citation>
    <subject-validator regex="^S[0-9]{3}$"
                       advice="Please enter an ID in the form of SXXX, where X is a digit" />
    <experimental-setup>
    <description />
    <devices />
    <device-mapping />
  </experimental-setup>
    <post-actions>
        <export-to-csv name="Calculate scores and export to CSV"
                       location="C:\CPAR\intro"
                       header="true"
                       seperator=";"
                       filename="dynamic: '{session}-{time}.csv'.format(session = SESSION_NAME, time = SESSION_TIME)">
            <item name="Sex"
                  value="SUBJECT['SEX']"
                  default="NA"/>
            <item name="Age"
                  value="SUBJECT['AGE']"
                  default="NA"/>
            <item name="Status"
                  value="SUBJECT['STATUS']"
                  default="NA"/>
            <item name="Duration"
                  value="SUBJECT['DURATION']"
                  default="NA"/>
            <item name="Stess"
                  value="func: CALCULATIONS.Stess"
                  default="NA"/>
            <item name="Anxiety"
                  value="func: CALCULATIONS.Anxiety"
                  default="NA"/>
            <item name="Depresion"
                  value="func: CALCULATIONS.Depresion"
                  default="NA"/>
        </export-to-csv>
    </post-actions>
</experiment>